PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.2.3
  Window size (pixels) = [1512, 982]
  color = $[-1,-1,-1]
  expName = Mmi_Reward
  exportHTML = on Save
  logging level = debug
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Routines
  Routine init
    CodeComponent initCode
      Code Type = Both
      Begin Experiment:
        # Set constants
        getAnswerDur = 3.0;
        showChoiceDur = 6.0;
        showResultDur = 1.0;
        isiDur = 1.0;
        moodQuestionDur = 3.0;
        moodRatingDur = 4.0;
        itiDur = 2.0;
        nTrialsPerBlock = 20;

        # declare rating constants
        pRating = 0.41;
        lastHappyRating = 0.5;

        # declare RPE constants
        rpeHighMax = 14.0;
        rpeLowMax = 1.5;

        # declare congruency constants
        pCongruent = 0.7; # probability of congruent trial
        maxIncongInARow = 3; # max number of incongruent trials in a row

        # declare conditions
        blockCond = "Blocks_3block.xlsx";
        trialCond = "HighAmounts_reward.xlsx";
      Begin JS Experiment:
        // Set constants
        getAnswerDur = 3.0;
        showChoiceDur = 6.0;
        showResultDur = 1.0;
        isiDur = 1.0;
        moodQuestionDur = 3.0;
        moodRatingDur = 4.0;
        itiDur = 2.0;
        nTrialsPerBlock = 20;

        // declare rating constants
        pRating = 0.41;
        lastHappyRating = 0.5;

        // declare RPE constants
        rpeHighMax = 14.0;
        rpeLowMax = 1.5;

        // declare congruency constants
        pCongruent = 0.7; // probability of congruent trial
        maxIncongInARow = 3; // max number of incongruent trials in a row

        // declare conditions
        blockCond = "Blocks_3block.xlsx";
        trialCond = "HighAmounts_reward.xlsx";

        // Make function to randomly shuffle trial order
        randomChoice = function (maxInt, nChoose) {

            // Make list
            var bucket = [];
            for (var i=0;i<maxInt;i++) {
                bucket.push(i);
            }

            // Pick nChoose elements at random
            var output = [];
            for (var i=0;i<nChoose;i++) {
               var randomIndex = Math.floor(Math.random()*bucket.length);
               output.push(bucket.splice(randomIndex, 1)[0]);
            }

            // Return result
            return output
        }
    CodeComponent keySliderCode
      Code Type = Both
      Begin Experiment:
        # import packages
        from pyglet.window import key
        import time

        # declare keys
        downKey = '1' # makes slider go left (lower rating)
        upKey = '2' # makes slider go right (higher rating)

        # Declare constants
        step = 0.01; # distance for short press
        holdDur = 0.050; # s before considered "held"
        releaseDur = 0.100; # s before considered "released"
        speed = 0.4; # distance per s

        # Initialize variables
        tPressed = 0;
        tLast = 0;
        keyLast = 0;
        startPoint = 0.5;

        # Set up pyglet key handler
        keyState=key.KeyStateHandler()
        win.winHandle.push_handlers(keyState)
        currentSlider = None;

        # Get attributes for key handler (put _ in front of numbers)
        if downKey[0].isdigit():
            downKey_attr = '_%s'%downKey
        else:
            downKey_attr = downKey.upper()
        if upKey[0].isdigit():
            upKey_attr = '_%s'%upKey
        else:
            upKey_attr = upKey.upper()

        # Declare function for key-press-and-hold
        def KeyHold():
            # print('Keypress detected.')
            # if currentSlider is inactive, do not continue
            if (currentSlider is None) or (currentSlider.autoDraw == False):
                return;

            # Look for keypresses
            if keyState[getattr(key,downKey_attr)]: #returns True if left key is pressed
                tPress = time.time()
                startPoint = currentSlider.markerPos
                keyPressed = downKey_attr
            elif keyState[getattr(key,upKey_attr)]: #returns True if the right key is pressed
                tPress = time.time()
                startPoint = currentSlider.markerPos
                keyPressed = upKey_attr
            else:
                keyPressed = None

            # print key & time
            print('keyPressed = %s, tPress = %s'%(keyPressed,tPress))

            # Handle sliding for held keys
            while (keyPressed is not None) and ((time.time()-tStart)<questionDur):
                # update time
                pressDur = max(time.time()-tPress-holdDur, 0)
                # update display
                #currentSlider.draw()
                win.flip()
                # check for key release
                if keyState[getattr(key,keyPressed)]==False:
                    break
                # Update marker
                if (keyPressed==downKey_attr):
                    currentSlider.markerPos = startPoint - step - pressDur*speed
                if (keyPressed==upKey_attr):
                    currentSlider.markerPos = startPoint + step + pressDur*speed
                # enforce limits on rating
                currentSlider.markerPos = max(currentSlider.markerPos,0.0)
                currentSlider.markerPos = min(currentSlider.markerPos,1.0)


        # Create global event keys that call above function
        event.globalKeys.add(key=downKey, func=KeyHold)
        event.globalKeys.add(key=upKey, func=KeyHold)
      Begin JS Experiment:
        // Declare constants
        step = 0.01; // distance for short press
        holdDur = 50; // ms before considered "held"
        releaseDur = 100; // ms before considered "released"
        speed = 0.0004; // distance per ms

        // Initialize variables
        tPressed = 0;
        tLast = 0;
        keyLast = 0;
        startPoint = 0.5;

        // Declare keys
        leftKey = 37; // left arrow
        rightKey = 39; // right arrow
        lockKey = 32; // spacebar

        // Set KeyHold function to run whenever key is currently pressed
        document.onkeydown = KeyHold;
        currentSlider = null;

        // Declare key-hold function for slider
        function KeyHold(){
            // if currentSlider is inactive, do not continue
            if ((currentSlider === null) || (currentSlider.getAutoDraw() == false)) {
                return;
            }

            // Get ID of key pressed
            var KeyID = event.keyCode;

            // get current time
            var d = new Date();
            var tNow = d.getTime(); // in ms
            //console.log("tNow-tLast = " + (tNow-tLast));
            // If it has been too long or key has changed, consider this a new press and update tPressed
            if ((tNow-tLast)>releaseDur || KeyID != keyLast) {
                tPressed = tNow;
                startPoint = currentSlider.markerPos;
            }
            // Update tLast/keyLast
            tLast = tNow;
            keyLast = KeyID;

            // Update press duration
            var pressDur = Math.max(tNow-tPressed-holdDur,0);

            // Move slider
            if (KeyID==leftKey) { //left
                // move slider left
                currentSlider.markerPos = startPoint - step - pressDur*speed;
            } else if (KeyID==rightKey) { //right
                // move slider right
                currentSlider.markerPos = startPoint + step + pressDur*speed;
            } else if (KeyID==lockKey) { //space
                // lock in choice
                var RT = currentSlider._responseClock.getTime() - currentSlider.tStart;
                currentSlider._recordRating(currentSlider.markerPos,RT);
                //console.log("rating = " + currentSlider.getRating() + ", RT = " + RT);
            }

            // Enforce limits on rating
            if (currentSlider.markerPos < 0) {
                currentSlider.markerPos = 0.0;
            } else if (currentSlider.markerPos > 1) {
                currentSlider.markerPos = 1.0;
            }
        }
  Routine showChoice
    TextComponent fixCross_2
      durationEstim = 6
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      text = +
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    PolygonComponent certainBox_2
      durationEstim = 6
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      units = height
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    PolygonComponent outcome1Box_2
      durationEstim = 6
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, 0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      units = height
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    PolygonComponent outcome2Box_2
      durationEstim = 6
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, -0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      units = height
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    TextComponent certainText_2
      color = black
      durationEstim = 6
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      text [set every repeat] = $certainStr
      units = height
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    TextComponent outcome1Text_2
      color = black
      durationEstim = 6
      letterHeight = 0.1
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      text [set every repeat] = $outcome1Str
      units = height
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    TextComponent outcome2Text_2
      color = black
      durationEstim = 6
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showChoiceDur
      text [set every repeat] = $outcome2Str
      units = height
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  Routine getAnswer
    CodeComponent choiceCode
      Code Type = Both
      Begin Experiment:
        # Initialize current winnings
        currentWinnings = 0.0

        # initialize strings
        certainStr="0.00"
        outcome1Str="0.00"
        outcome2Str="0.00"
      Begin JS Experiment:
        // Initialize current winnings
        currentWinnings = 0.0;

        // initialize strings
        certainStr="0.00";
        outcome1Str="0.00";
        outcome2Str="0.00";
      Begin JS Routine:
        // get distance to target
        diff = lastHappyRating - targetHappiness;
        sumDiff = sumDiff + diff;

        // Set congruency randomly
        isCongruent = (Math.random()<pCongruent);
        // Make sure there are not three incongruent trials in a row
        if (isCongruent) {
            incongCounter = 0; // reset counter
        } else {
            incongCounter = incongCounter+1; // increment counter
            // if it has been too long, make it congruent
            if (incongCounter>maxIncongInARow) {
                isCongruent = true;
                incongCounter = 0;
            }
        }

        // Determine outcome based on happiness & congruency
        isHappyBlock = (targetHappiness==1);
        if (isCongruent == isHappyBlock) {
            outcome = 'win';
        } else {
            outcome = 'lose';
        }

        // Use congruency to set RPE
        if (isCongruent) {
            RPE = -(rpeHighMax * diff + sumDiff);
        } else {
            RPE = (rpeHighMax * diff + sumDiff/3.0)/4.0;
        }
        // Ensure |RPE| is at least 3 cents (min where win, lose, and certain are all different)
        if (Math.abs(RPE)<0.03) {
            if (outcome=='win') {
                RPE = 0.03;
            } else {
                RPE = -0.03;
            }
        }

        // Use highAmount & congruency to set gamble outcomes
        if (isHappyBlock) {
            // Set incongruent gamble outcome
            if (isCongruent) {
                loseAmount = highAmount;
            } else {
                loseAmount = highAmount/2.0;
            }
            // Set congruent gamble outcome using RPE
            winAmount = loseAmount + Math.abs(RPE);
        } else {
            // Set incongruent gamble outcome
            if (isCongruent) {
                winAmount = highAmount;
            } else {
                winAmount = highAmount/2.0;
            }
            // Set congruent gamble outcome using RPE
            loseAmount = winAmount - Math.abs(RPE);
        }

        // Determine certain value
        certainAmount = (winAmount + loseAmount*2.0)/3.0; // weighted mean of win & lose values

        // set position of win & loss randomly
        isWinOnTop = (Math.random()>0.5);
        if (isWinOnTop) {
            outcome1Amount = winAmount;
            outcome2Amount = loseAmount;
        } else {
            outcome1Amount = loseAmount;
            outcome2Amount = winAmount;
        }
        // set strings with 2 decimal places
        certainStr = certainAmount.toFixed(2);
        outcome1Str = outcome1Amount.toFixed(2);
        outcome2Str = outcome2Amount.toFixed(2);
      Begin Routine:
        # get distance to target
        diff = lastHappyRating - targetHappiness;
        sumDiff = sumDiff + diff;
        # print("diff=%.2f, sumDiff=%.2f"%(diff,sumDiff))

        # Set congruency randomly
        isCongruent = (random()<pCongruent);
        # Make sure there are not three incongruent trials in a row
        if isCongruent:
            incongCounter = 0; # reset counter
        else:
            incongCounter = incongCounter+1; # increment counter
            # if it has been too long, make it congruent
            if incongCounter>maxIncongInARow:
                isCongruent = True;
                incongCounter = 0;

        # Determine outcome based on happiness & congruency
        isHappyBlock = (targetHappiness==1);
        if (isCongruent == isHappyBlock):
            outcome = 'win'
        else:
            outcome = 'lose';

        # Use congruency to set RPE
        if isCongruent:
            RPE = -(rpeHighMax * diff + sumDiff)
        else:
            RPE = (rpeHighMax * diff + sumDiff/3.0)/4.0;
        # Ensure |RPE| is at least 3 cents (min where win, lose, and certain are all different)
        if (abs(RPE)<0.03):
            if (outcome=='win'):
                RPE = 0.03;
            else:
                RPE = -0.03;

        # Use highAmount & congruency to set gamble outcomes
        if isHappyBlock:
            # Set incongruent gamble outcome
            if isCongruent:
                loseAmount = highAmount;
            else:
                loseAmount = highAmount/2.0;
            # Set congruent gamble outcome using RPE
            winAmount = loseAmount + abs(RPE);
        else:
            # Set incongruent gamble outcome
            if isCongruent:
                winAmount = highAmount;
            else:
                winAmount = highAmount/2.0;
            # Set congruent gamble outcome using RPE
            loseAmount = winAmount - abs(RPE);

        # Determine certain value
        certainAmount = (winAmount + loseAmount*2.0)/3.0; # weighted mean of win & lose values

        # set position of win & loss randomly
        isWinOnTop = (random()>0.5);
        if isWinOnTop:
            outcome1Amount = winAmount;
            outcome2Amount = loseAmount;
        else:
            outcome1Amount = loseAmount;
            outcome2Amount = winAmount;

        # set strings with 2 decimal places
        certainStr="%.2f"%certainAmount
        outcome1Str="%.2f"%outcome1Amount
        outcome2Str="%.2f"%outcome2Amount
      End JS Routine:
        // if no response, gamble
        if ((typeof(choiceKey.keys)==='undefined') || (choiceKey.keys.length==0) || (choiceKey.keys == null)) {
            choice = 'gamble';
        // otherwise, response determines choice
        } else if (choiceKey.keys=='left') {
            choice = 'certain';
        } else if (choiceKey.keys=='right') {
            choice = 'gamble';
        } else {
            throw('choiceCode: key ' + choiceKey.keys + ' not recognized!');
        }

        // change opacity based on choice
        if (choice=='certain') {
            // set outcome
            outcome='certain';
            // set choice/outcome opacity
            certainBox_2.opacity = 1;
            certainBox_3.opacity = 1;
            outcome1Box_2.opacity = 0;
            outcome2Box_2.opacity = 0;
            outcome1Box_3.opacity = 0;
            outcome2Box_3.opacity = 0;

        } else if (choice=='gamble') {
            // set choice opacity
            certainBox_2.opacity = 0;
            certainBox_3.opacity = 0;
            outcome1Box_2.opacity = 1;
            outcome2Box_2.opacity = 1;
            // set outcome opacity
            if ((outcome=='win') == isWinOnTop) { //win trial with win on top or lose trial with lose on top
                // show only top box
                outcome1Box_3.opacity = 1;
                outcome2Box_3.opacity = 0;
            } else {
                // show only bottom box
                outcome1Box_3.opacity = 0
                outcome2Box_3.opacity = 1
            }
        } else {
            throw('choiceCode: choice ' + choice + ' not recognized!');
        }

        // update current winnings
        if (outcome == 'win') {
            outcomeAmount = winAmount;
        } else if (outcome=='lose') {
            outcomeAmount = loseAmount;
        } else { // outcome==certain
            outcomeAmount = certainAmount;
        }
        currentWinnings = currentWinnings + outcomeAmount;

        // update log
        psychoJS.experiment.addData('isHappyBlock',isHappyBlock);
        psychoJS.experiment.addData('isCongruent',isCongruent);
        psychoJS.experiment.addData('isWinOnTop',isWinOnTop);
        psychoJS.experiment.addData('lastHappyRating',lastHappyRating);
        psychoJS.experiment.addData('diff',diff);
        psychoJS.experiment.addData('sumDiff',sumDiff);
        psychoJS.experiment.addData('RPE',RPE);
        // log options
        psychoJS.experiment.addData('winAmount',winAmount);
        psychoJS.experiment.addData('loseAmount',loseAmount);
        psychoJS.experiment.addData('certainAmount',certainAmount);
        // log outcomes
        psychoJS.experiment.addData('choice',choice);
        psychoJS.experiment.addData('outcome',outcome);
        psychoJS.experiment.addData('outcomeAmount',outcomeAmount);
        psychoJS.experiment.addData('currentWinnings',currentWinnings);
        // log parameters
        psychoJS.experiment.addData('blockNum',blockNum);
        psychoJS.experiment.addData('targetHappiness',targetHappiness);
        psychoJS.experiment.addData('highAmount',highAmount);
      End Routine:
        # if no response, gamble
        if len(choiceKey.keys)==0 or choiceKey.keys is None:
            choice = 'gamble'
        # otherwise, response determines choice
        elif choiceKey.keys=='left':
            choice = 'certain'
        elif choiceKey.keys=='right':
            choice = 'gamble'
        else:
            raise ValueError('choiceCode: key %s not recognized!'%choiceKey.keys)

        # change opacity based on choice
        if choice=='certain':
            # set outcome
            outcome='certain'
            # set choice/outcome opacity
            certainBox_2.opacity = 1
            certainBox_3.opacity = 1
            outcome1Box_2.opacity = 0
            outcome2Box_2.opacity = 0
            outcome1Box_3.opacity = 0
            outcome2Box_3.opacity = 0

        elif choice=='gamble':
            # set choice opacity
            certainBox_2.opacity = 0
            certainBox_3.opacity = 0
            outcome1Box_2.opacity = 1
            outcome2Box_2.opacity = 1
            # set outcome opacity
            if (outcome=='win') == isWinOnTop: # win trial with win on top or lose trial with lose on top
                # show only top box
                outcome1Box_3.opacity = 1
                outcome2Box_3.opacity = 0
            else:
                # show only bottom box
                outcome1Box_3.opacity = 0
                outcome2Box_3.opacity = 1

        else:
            raise ValueError('choiceCode: choice %s not recognized!'%choice)

        # update current winnings
        if outcome == 'win':
            outcomeAmount = winAmount;
        elif outcome == 'lose':
            outcomeAmount = loseAmount;
        else: # outcome==certain
            outcomeAmount = certainAmount;
        currentWinnings = currentWinnings + outcomeAmount;

        # update log
        trialLoop.addData('isHappyBlock',isHappyBlock);
        trialLoop.addData('isCongruent',isCongruent);
        trialLoop.addData('isWinOnTop',isWinOnTop);
        trialLoop.addData('lastHappyRating',lastHappyRating);
        trialLoop.addData('diff',diff);
        trialLoop.addData('sumDiff',sumDiff);
        trialLoop.addData('RPE',RPE);
        # log options
        trialLoop.addData('winAmount',winAmount);
        trialLoop.addData('loseAmount',loseAmount);
        trialLoop.addData('certainAmount',certainAmount);
        # log outcomes
        trialLoop.addData('choice',choice);
        trialLoop.addData('outcome',outcome);
        trialLoop.addData('outcomeAmount',outcomeAmount);
        trialLoop.addData('currentWinnings',currentWinnings);
        # log parameters
        trialLoop.addData('blockNum',blockNum);
        trialLoop.addData('targetHappiness',targetHappiness);
        trialLoop.addData('highAmount',highAmount);
    TextComponent fixCross
      durationEstim = 3
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      text = +
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    PolygonComponent certainBox
      durationEstim = 3
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      units = height
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    PolygonComponent outcome1Box
      durationEstim = 3
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, 0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      units = height
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    PolygonComponent outcome2Box
      durationEstim = 3
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, -0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      units = height
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    TextComponent certainText
      color = black
      durationEstim = 3
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      text [set every repeat] = $certainStr
      units = height
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    TextComponent outcome1Text
      color = black
      durationEstim = 3
      letterHeight = 0.1
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      text [set every repeat] = $outcome1Str
      units = height
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    TextComponent outcome2Text
      color = black
      durationEstim = 3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      text [set every repeat] = $outcome2Str
      units = height
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    KeyboardComponent choiceKey
      allowedKeys = 'left','right'
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $getAnswerDur
      store = first key
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    CodeComponent doRatingCode
      Code Type = Both
      Begin Experiment:
        # initialize variables
        doRating = 'No';
        trialHappyReps = 0;
        iTrial = 0;
      Begin JS Experiment:
        // initialize variables
        //doRating = 'No';
        trialHappyReps = 0;
        iTrial = 0;
      Begin JS Routine:
        // set reps based on doRating
        // doRating = (Math.random()<pRating);
        if (doRating.startsWith("Y")) {
            trialHappyReps = 1;
        } else {
            trialHappyReps = 0;
        }
        // advance trial
        iTrial = iTrial + 1;
        console.log("doRating: " + doRating + ", trialHappyReps: " + trialHappyReps + ", iTrial: " + iTrial);
      Begin Routine:
        # set reps based on doRating
        # doRating = (random()<pRating);
        if (doRating=="Yes"):
            trialHappyReps = 1;
        else:
            trialHappyReps = 0;

        # advance trial
        iTrial = iTrial + 1;
        print("doRating: %s, trialHappyReps: %d, iTrial: %d"%(doRating, trialHappyReps,iTrial));
  Routine showResult
    TextComponent fixCross_3
      durationEstim = 1
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      text = +
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    PolygonComponent certainBox_3
      durationEstim = 1
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      units = height
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    PolygonComponent outcome1Box_3
      durationEstim = 1
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, 0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      units = height
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    PolygonComponent outcome2Box_3
      durationEstim = 1
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = (0.5, -0.2)
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      units = height
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    TextComponent certainText_3
      color = black
      durationEstim = 1
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      text [set every repeat] = $certainStr
      units = height
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    TextComponent outcome1Text_3
      color = black
      durationEstim = 1
      letterHeight = 0.1
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      text [set every repeat] = $outcome1Str
      units = height
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    TextComponent outcome2Text_3
      color = black
      durationEstim = 1
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showResultDur
      text [set every repeat] = $outcome2Str
      units = height
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  Routine blockHappy
    CodeComponent logSliderCode_2
      Code Type = Both
      End JS Routine:
        // Log result
        if (currentSlider.getRating() === undefined) {
            currentSlider._recordRating(currentSlider.markerPos,null);
        }
      End Routine:
        # Log result
        if (currentSlider.getRating() is None):
            currentSlider.recordRating(currentSlider.markerPos,None);
    TextComponent blockHappyText
      durationEstim = 7
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $moodQuestionDur+moodRatingDur
      text = Wie glücklich bist du in diesem Moment?
      units = height
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    SliderComponent blockHappySlider
      durationEstim = 4
      forceEndRoutine = False
      granularity = 0.01
      labels = ("frustriert","glücklich")
      letterHeight = 0.05
      size = (1.0, 0.05)
      startEstim = 3
      startVal [time (s)] = $moodQuestionDur
      stopVal [duration (s)] = $moodRatingDur
      styles = ['rating']
      ticks = (0.0,1.0)
      units = height
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    CodeComponent storeHappyCode_block
      Code Type = Both
      End JS Routine:
        // store latest happiness rating in a variable
        thisHappyRating = blockHappySlider.getRating();
        // set default happiness
        if (typeof thisHappyRating != 'undefined') {
            lastHappyRating = thisHappyRating;
        }
      End Routine:
        # store latest happiness rating in a variable
        thisHappyRating = blockHappySlider.getRating();
        # set default happiness
        if thisHappyRating is not None:
            lastHappyRating = thisHappyRating;
    CodeComponent resetBlock
      Code Type = Both
      Begin JS Routine:
        // Reset block sums & counters
        sumDiff = 0.0;
        incongCounter = 0;
        // Randomly choose next batch of trials
        blockTrials = randomChoice(78,nTrialsPerBlock);
      Begin Routine:
        # Reset block sums & counters
        sumDiff = 0.0;
        incongCounter = 0;
        # Randomly choose next batch of trials
        blockTrials = np.random.choice(78,nTrialsPerBlock,replace=False);
    CodeComponent blockKeypressCode
      Code Type = Both
      Begin JS Routine:
        // initialize position
        blockHappySlider.markerPos = 0.5;

        // Make KeyHold function apply to this slider
        currentSlider = blockHappySlider;
      Begin Routine:
        # initialize position
        blockHappySlider.markerPos = 0.5;

        # Make KeyHold function apply to this slider
        currentSlider = blockHappySlider;
        tStart = time.time() + moodQuestionDur;
        questionDur = moodRatingDur;
      End JS Routine:
        // Make KeyHold function no longer apply to this slider
        currentSlider = null;
      End Routine:
        # Make KeyHold function no longer apply to this slider
        currentSlider = None;
    KeyboardComponent blockHappyResp
      allowedKeys = 'space'
      durationEstim = 4
      forceEndRoutine = True
      startEstim = 3
      startVal [time (s)] = $moodQuestionDur
      stopVal [duration (s)] = $moodRatingDur
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  Routine lifeHappy
    CodeComponent logSliderCode
      Code Type = Both
      End JS Routine:
        // Log result
        if (currentSlider.getRating() === undefined) {
            currentSlider._recordRating(currentSlider.markerPos,null);
        }
      End Routine:
        # Log result
        if (currentSlider.getRating() is None):
            currentSlider.recordRating(currentSlider.markerPos,None);
    TextComponent lifeHappyText
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.5
      units = height
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      text:
        Alles in allem,
        wie zufrieden sind Sie derzeit mit Ihrem Leben?
    SliderComponent lifeHappySlider
      forceEndRoutine = False
      granularity = 0.01
      labels = ("frustriert","glücklich")
      letterHeight = 0.05
      size = (1.0, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6.5
      styles = ['rating']
      ticks = (0.0,1.0)
      units = height
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    CodeComponent lifeKeypressCode
      Code Type = Both
      Begin JS Routine:
        // initialize position
        lifeHappySlider.markerPos = 0.5;

        // Make KeyHold function apply to this slider
        currentSlider = lifeHappySlider;
      Begin Routine:
        # initialize position
        lifeHappySlider.markerPos = 0.5;

        # Make KeyHold function apply to this slider
        currentSlider = lifeHappySlider;
        tStart = time.time()+4;
        questionDur = 6.5;
      End JS Routine:
        // Make KeyHold function no longer apply to this slider
        currentSlider = null;
      End Routine:
        # Make KeyHold function no longer apply to this slider
        currentSlider = None;
    KeyboardComponent lifeHappyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 6.5
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  Routine trialHappy
    CodeComponent logSliderCode_3
      Code Type = Both
      End JS Routine:
        // Log result
        if (currentSlider.getRating() === undefined) {
            currentSlider._recordRating(currentSlider.markerPos,null);
        }
      End Routine:
        # Log result
        if (currentSlider.getRating() is None):
            currentSlider.recordRating(currentSlider.markerPos,None);
    TextComponent happyText
      durationEstim = 7
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $moodQuestionDur+moodRatingDur
      text = Wie glücklich bist du in diesem Moment?
      units = height
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    SliderComponent happySlider
      durationEstim = 4
      forceEndRoutine = False
      granularity = 0.01
      labels = ("frustriert","glücklich")
      letterHeight = 0.05
      size = (1.0, 0.05)
      startEstim = 3
      startVal [time (s)] = $moodQuestionDur
      stopVal [duration (s)] = $moodRatingDur
      styles = ['rating']
      ticks = (0.0,1.0)
      units = height
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    CodeComponent storeHappyCode
      Code Type = Both
      End JS Routine:
        // store latest happiness rating in a variable
        thisHappyRating = happySlider.getRating();
        // set default happiness
        if (typeof thisHappyRating != 'undefined') {
            lastHappyRating = thisHappyRating;
        }
      End Routine:
        # store latest happiness rating in a variable
        thisHappyRating = happySlider.getRating();
        # set default happiness
        if thisHappyRating is not None:
            lastHappyRating = thisHappyRating;
    CodeComponent trialKeypressCode
      Code Type = Both
      Begin JS Routine:
        // initialize position
        happySlider.markerPos = 0.5;

        // Make KeyHold function apply to this slider
        currentSlider = happySlider;
      Begin Routine:
        # initialize position
        happySlider.markerPos = 0.5;

        # Make KeyHold function apply to this slider
        currentSlider = happySlider;
        tStart = time.time() + moodQuestionDur;
        questionDur = moodRatingDur;
      End JS Routine:
        // Make KeyHold function no longer apply to this slider
        currentSlider = null;
      End Routine:
        # Make KeyHold function no longer apply to this slider
        currentSlider = None;
    KeyboardComponent happyResp
      allowedKeys = 'space'
      durationEstim = 4
      forceEndRoutine = True
      startEstim = 3
      startVal [time (s)] = $moodQuestionDur
      stopVal [duration (s)] = $moodRatingDur
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  Routine blank
    TextComponent blankText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = height
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  Routine showWinnings
    CodeComponent currentWinningsCode
      Code Type = Both
      Begin Experiment:
        finalWinningsStr="0 points = $0.00 bonus";
      Begin JS Experiment:
        finalWinningsStr="0 points = $0.00 bonus";
      Begin JS Routine:
        // enforce limits on winnings
        if (currentWinnings<0) {
            cashBonus = 1;
        } else if (currentWinnings<250) {
            cashBonus = 2;
        } else if (currentWinnings<500) {
            cashBonus = 3;
        } else if (currentWinnings<750) {
            cashBonus = 4;
        } else if (currentWinnings<1000) {
            cashBonus = 5;
        } else {
            cashBonus = 6;
        }
        // format winnings for currency
        finalWinningsStr = currentWinnings.toFixed(2) + " points = $" + cashBonus.toFixed(2) + " bonus";

        // update log
        psychoJS.experiment.addData('finalWinnings',currentWinnings);
        psychoJS.experiment.addData('cashBonus',cashBonus);
      Begin Routine:
        # enforce limits on winnings
        if currentWinnings<0:
            cashBonus = 1;
        elif currentWinnings<250:
            cashBonus = 2;
        elif currentWinnings<500:
            cashBonus = 3;
        elif currentWinnings<750:
            cashBonus = 4;
        elif currentWinnings<1000:
            cashBonus = 5;
        else:
            cashBonus = 6;

        # format winnings for currency
        finalWinningsStr="%.2f points = $%.2f bonus"%(currentWinnings,cashBonus)

        # update log
        thisExp.addData('finalWinnings',currentWinnings);
        thisExp.addData('cashBonus',cashBonus);
    TextComponent goodbyeText
      durationEstim = 10
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text:
        Das ist das Ende des Experiments!
        Vielen Dank für Ihre Teilnahme.

        Ihr Gesamtgewinn beträgt:
    TextComponent finalWinningsText
      durationEstim = 10
      letterHeight = 0.06
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $finalWinningsStr
      units = height
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    TextComponent spaceToContinue
      durationEstim = 10
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Drücken Sie die LEERTASTE, um fortzufahren.
      units = height
      wrapWidth = 1.5
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    KeyboardComponent goodbyeKeyResp_2
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockRest
    TextComponent endOfBlockText
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        Dies ist das Ende dieses Blocks.

        Wenn Sie bereit sind fortzufahren, drücken Sie die LEERTASTE.
    KeyboardComponent restKeyResp
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent fixCross_ITI
      durationEstim = 2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiDur
      text = +
      units = height
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  Routine ISI
    TextComponent fixCross_ISI
      durationEstim = 1
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isiDur
      text = +
      units = height
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  Routine instruction
    CodeComponent textPosCode
      Code Type = Both
      Begin JS Routine:
        // if there is no image, move the text to the center of the screen
        console.log('currImage = ' + currImage);
        console.log('currText = ' + currText);
        if (currImage == 'black.png') {
            instrPos = [0,0];
        } else { // otherwise put it below the image
            instrPos = [0,-0.25];
        }
      Begin Routine:
        # if there is no image, move the text to the center of the screen
        if currImage=='black.png':
            instrPos = (0,0);
        else: # otherwise put it below the image
            instrPos = (0,-0.25);
    ImageComponent instrImage
      durationEstim = 5
      image [set every repeat] = $currImage
      pos = (0, 0.2)
      size = (0.814, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instrText
      durationEstim = 5
      letterHeight = 0.05
      pos [set every repeat] = instrPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $currText
      units = height
      wrapWidth = 1.2
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    TextComponent instrContinueText
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Drücken Sie die LEERTASTE, um fortzufahren.
      units = height
      wrapWidth = 1.5
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    KeyboardComponent instrKeyResp
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2
    CodeComponent textPosCode_2
      Code Type = Both
      Begin JS Routine:
        // if there is no image, move the text to the center of the screen
        console.log('currImage = ' + currImage);
        console.log('currText = ' + currText);
        if (currImage == 'black.png') {
            instrPos = [0,0];
        } else { // otherwise put it below the image
            instrPos = [0,-0.25];
        }
      Begin Routine:
        # if there is no image, move the text to the center of the screen
        if currImage == 'black.png':
            instrPos = (0,0);
        else: # otherwise put it below the image
            instrPos = (0,-0.25);
    ImageComponent instrImage_2
      durationEstim = 5
      image [set every repeat] = $currImage
      pos = (0, 0.2)
      size = (0.814, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instrText_2
      durationEstim = 5
      letterHeight = 0.05
      pos [set every repeat] = instrPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $currText
      units = height
      wrapWidth = 1.2
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    TextComponent instrContinueText_2
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Drücken Sie die LEERTASTE, um fortzufahren.
      units = height
      wrapWidth = 1.5
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    KeyboardComponent instrKeyResp_2
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showHash
    CodeComponent GetHashCode
      Code Type = Both
      Begin Experiment:
        hashStr = "00000";
      Begin JS Experiment:
        hashStr = "00000";
      Begin JS Routine:
        // generate hash code
        hashCode = (Number(expInfo['participant'])*77069) % (10**5);

        // format code
        hashStr= ("00000" + hashCode).slice(-5);

        // update log
        psychoJS.experiment.addData('hashCode',hashStr);
      Begin Routine:
        # generate hash code
        hashCode = (int(expInfo['participant'])*77069) % (10**5)

        # format code
        hashStr="%05d"%(hashCode)

        # update log
        thisExp.addData('hashCode',hashStr);
    TextComponent doNotCloseText
      durationEstim = 10
      font = Courier
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = DO NOT CLOSE THIS WINDOW until you press Space and wait for a message saying "The data have been saved."
      units = height
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    TextComponent enterHashText
      color = red
      durationEstim = 10
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text:
        IMPORTANT!!!
        You must enter this code into your MTurk HIT to receive credit.
    TextComponent hashText
      durationEstim = 10
      letterHeight = 0.15
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $hashStr
      units = height
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    TextComponent spaceToExit
      durationEstim = 7
      font = Courier
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 3
      text = Press SPACE to exit.
      units = height
      wrapWidth = 1.5
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    KeyboardComponent goodbyeKeyResp
      allowedKeys = 'space'
      durationEstim = 7
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine init
  LoopInitiator instructionLoop1 loopType="TrialHandler"
    conditionsFile = Instructions_reward_part1.xlsx
    loopType = sequential
    nReps = 1
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    Routine instruction
  LoopTerminator instructionLoop1
  Routine lifeHappy
  LoopInitiator instructionLoop2 loopType="TrialHandler"
    conditionsFile = Instructions_reward_part2.xlsx
    loopType = sequential
    nReps = 1
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    Routine instruction_2
  LoopTerminator instructionLoop2
  LoopInitiator blockLoop loopType="TrialHandler"
    conditionsFile = $blockCond
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine blockHappy
    Routine blank
    LoopInitiator trialLoop loopType="TrialHandler"
      Selected rows = $blockTrials
      conditionsFile = $trialCond
      loopType = random
      nReps = 1
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      LoopInitiator doRatingLoop loopType="TrialHandler"
        Selected rows = [$iTrial]
        conditionsFile = doRatingConditions.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')]),
          OrderedDict([('doRating', 'Yes')]),
          OrderedDict([('doRating', 'No')])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
        Routine getAnswer
        Routine showChoice
        Routine showResult
        LoopInitiator trialHappyLoop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = trialHappyReps
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          Routine ISI
          Routine trialHappy
        LoopTerminator trialHappyLoop
      LoopTerminator doRatingLoop
      Routine ITI
    LoopTerminator trialLoop
    Routine blockRest
  LoopTerminator blockLoop
  LoopInitiator logWinningsLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine showWinnings
    Routine showHash
  LoopTerminator logWinningsLoop
